PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/videos/MeMoS - Memory Condition.mp4']
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1800, 1169]
  color = $[-1,-1,-1]
  expName = memos_memory_task
  exportHTML = manually
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Routines
  Routine Overall_Instruction
    TextComponent Overall_Instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        WELCOME!

        For this experiment, please exclusively rely on your memory when making decisions. You should try to be as accurate as possible when deciding on the OLD/NEW decisions.

        Just try your best, even if it feels difficult.

        Press the spacebar to continue.
    KeyboardComponent Overall_Instruction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine Learning_Trial
    ImageComponent LearningImage
      image [set every repeat] = $FacePic
      size [set every repeat] = (0.201, 0.256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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  Routine CustCode
  Routine Code
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Task by Sara Leslie, 2023
        # Repurposed for MeMoS Study by Alex Reed, 2023

        import random  # Import the random module

        mode = 'actual'

        if mode == 'testing':
            # Define necessary variables for testing block
            num_study = 3
            pics_per_block = 6
            old_per_cond = 1
            new_per_cond = 1
            num_test = old_per_cond + new_per_cond
            num_items = pics_per_block
            num_blocks = 2
        elif mode == 'actual':
            # Define necessary variables for actual block
            num_study = 27
            pics_per_block = 54
            old_per_cond = 9
            new_per_cond = 9
            num_test = old_per_cond + new_per_cond
            num_items = pics_per_block
            num_blocks = 6

        # Initialize variables
        blockn = 0
        blocknumber = 1
        blocknumber_alt = 1
        reward_number = 0
        themecounter = 0
        condorder_counter = 0
        condorder_now = []
        trialpay = 0
        totaltrialnum = 1

        # Define the permutations of conditions for the blocks
        cond_perm = [[0, 1, 2], [1, 0, 2], [2, 0, 1],
                     [0, 2, 1], [1, 2, 0], [2, 1, 0],
                     [0, 1, 2], [1, 0, 2], [2, 0, 1],
                     [0, 2, 1], [1, 2, 0], [2, 1, 0]]

        # Shuffle the permutation list using the random module
        random.shuffle(cond_perm)

        # Define face sets for each category
        faceset1 = ["resources/faceset13/faceset13_" + str(num) + ".jpg" for num in range(1, num_items + 1)]
        faceset2 = ["resources/faceset14/faceset14_" + str(num) + ".jpg" for num in range(1, num_items + 1)]
        faceset3 = ["resources/faceset15/faceset15_" + str(num) + ".jpg" for num in range(1, num_items + 1)]
        faceset4 = ["resources/faceset16/faceset16_" + str(num) + ".jpg" for num in range(1, num_items + 1)]
        faceset5 = ["resources/faceset17/faceset17_" + str(num) + ".jpg" for num in range(1, num_items + 1)]
        faceset6 = ["resources/faceset18/faceset18_" + str(num) + ".jpg" for num in range(1, num_items + 1)]

        # Shuffle each face set using the random module
        random.shuffle(faceset1)
        random.shuffle(faceset2)
        random.shuffle(faceset3)
        random.shuffle(faceset4)
        random.shuffle(faceset5)
        random.shuffle(faceset6)

        # Organize the face sets in an image array
        imagearray = [
            faceset1,
            faceset2,
            faceset3,
            faceset4,
            faceset5,
            faceset6
        ]
      Begin Routine:
        """

        studyarray = [[None for _ in range(6)] for _ in range(12)]
        testarray = [[None for _ in range(12)] for _ in range(12)]
        i = 0
        ss = []
        ts = []

        for j in range(12):
            i = j*2
            for k in range(6):
                studyarray[j][k] = stim_file[pics_per_block*i + k]
            for k in range(12):
                testarray[j][k] = stim_file[pics_per_block*i + k]
            console.log(ss)

        console.log(studyarray)
        console.log(testarray)

        """
  Routine Code_L_block_2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        num_study = 6

        # create a list of the order in which to show study items
        study_order_2 = list(range(num_study))

        # randomize the order of study list items
        util.shuffle(study_order_2)
        #random.shuffle(study_order_2)

        # current study trial
        study_trial_2 = 0
      Begin Routine:
        # assigning the study item
        FacePic = image_2[study_order_2[study_trial_2]]

        study_trial_2 = study_trial_2 + 1
  Routine Code_LT_block_2
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        num_test = 12

        # create a list of the order in which to show test items
        study_order_test_2 = list(range(num_test))

        # randomize the order of test list items
        util.shuffle(study_order_test_2)
        # random.shuffle(study_order_test_2)

        # current study trial
        study_trial_test_2 = 0
      Begin Routine:
        # assigning the study item
        FacePic_test_2 = LearnTest_2[study_order_test_2[study_trial_test_2]]

        study_trial_test_2 = study_trial_test_2 + 1
  Routine Learning_Test_2
    TextComponent text_2
      letterHeight = 0.03
      pos = (0, -0.32)
      startVal [time (s)] = 0.0
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      text:
        a = Low, old   s = Medium, old   d = High, old
        j = Low, new   k = Medium, new   l = High, new
    ImageComponent image
      image [set every repeat] = $FacePic_test_2
      size = (0.4, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'a','s','d','j','k','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LT_Feedback
    CodeComponent code_6
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if Learning_TestTrialKey.corr == 1:
            msg = "correct"
        else:
            msg = "wrong"
    TextComponent Feedback
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $msg
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  Routine Block_Randomizer_Init
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        #Randomize conservative, liberal, neutral order
        CLN_INIT = util.randint(1, 3)
        #LOOP = 1
        Conservative = false
        Liberal = false
        Neutral = false
        RAND = util.randint(1, 2)
  Routine Block_Randomizer_Loop
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if Conservative is true and Liberal is false and Neutral is false:
            CLN_INIT = util.randint(2,3)
        elif Conservative is false and Liberal is true and Neutral is false:
            if RAND == 1:
                CLN_INIT = 1
            else:
                CLN_INIT = 3

        elif Conservative is false and Liberal is false and Neutral is true:
            CLN_INIT = util.randint(1,2)
        elif Conservative is true and Liberal is true and Neutral is false:
            CLN_INIT = 3
        elif Conservative is false and Liberal is true and Neutral is true:
            CLN_INIT = 1
        elif Conservative is true and Liberal is false and Neutral is true:
            CLN_INIT = 2
        else:
            CLN_INIT = util.randint(1,3)
  Routine CLN_Display
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $CLN_Indicator
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        if Punish_1 == 10:
            CLN_Indicator = "Conservative"
        elif Punish_1 == 0:
            CLN_Indicator = "Liberal"
        else:
            CLN_Indicator = "Neutral"
  Routine Tracker
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        if CLN_INIT == 1:
            Conservative = true
        elif CLN_INIT == 2:
            Liberal = true
        else:
            Neutral = true
  Routine INIT_Display
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $CLN_INIT
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  Routine Display_Punish
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $msg
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  Routine Indicator
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $Punish_1
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  Routine CLN_Code
  Routine CLN_Points
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        #if Punish_1 == 10:
        #    Point_1 = 10
        #    Point_2 = 0
        #elif Punish_1 == 0:
        #    Point_1 = 0
        #    Point_2 = 10
        #else:
        #    Point_1 = 5
        #    Point_2 = 5
  Routine Blank300
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05025, 0.05025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine studyloop
    CodeComponent studyloopcode
      Code Type = Auto->JS
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      Begin Routine:
        study_trial = study_trial + 1
  Routine testloop
    CodeComponent testloopcode
      Code Type = Auto->JS
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      Begin Routine:
        # Increment the variable 'trialcounter' by 1
        trialcounter += 1

        # Increment the variable 'testtrialnum' by 1
        testtrialnum += 1

        # Increment the variable 'totaltrialnum' by 1
        totaltrialnum += 1
  Routine Code_TestBlock
    CodeComponent code_testimage
      Code Type = Auto->JS
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      Begin Routine:
        # Assigning the study item for the test phase
        # If we do not randomize, use the item based on the current trial counter
        FacePic_test = testset_using[trialcounter]

        # Check if the current FacePic_test is in the studyset_using list
        if str(FacePic_test) in studyset_using:
            good_job = "j"  # If it's in the list, assign 'j' to good_job
        else:
            good_job = "k"  # If it's not in the list, assign 'k' to good_job

        # Determine the value of 'imagetruth' based on the presence of FacePic_test in studyset_using
        if str(FacePic_test) in studyset_using:
             imagetruth = "old"  # If it's in the list, set 'imagetruth' to 'old'
        else:
             imagetruth = "new"  # If it's not in the list, set 'imagetruth' to 'new'

        # Add relevant data to the experiment log
        thisExp.addData('condition', condition)
        thisExp.addData('imageShown', FacePic_test)
        thisExp.addData('imageTruth', imagetruth)
        thisExp.addData('correctkey', good_job)
  Routine TestBlockCode
    CodeComponent testblockarrays
      Code Type = Auto->JS
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      Begin Routine:
        import random

        # Initialize variables
        concounter = 0  # Counter for some purpose
        condorder_now = cond_perm[condorder_counter]  # Current condition order

        blockpay = 0  # Variable for block payment
        testtrialnum = 1  # Number of the current test trial

        # Define the number of old items per test condition
        a = old_per_cond
        oldset_neu = oldset_using[0:a]  # Subset of old items for neutral condition
        oldset_con = oldset_using[a:a + a]  # Subset of old items for condition
        oldset_lib = oldset_using[a + a:a + a + a]  # Subset of old items for some other condition

        # Define the number of new items per test condition
        b = new_per_cond
        newset_neu = newset_using[0:b]  # Subset of new items for neutral condition
        newset_con = newset_using[b:b + b]  # Subset of new items for condition
        newset_lib = newset_using[b + b:b + b + b]  # Subset of new items for some other condition

        # Combine old and new items for different conditions
        testarray_neu = oldset_neu + newset_neu  # Combined array for the neutral condition
        testarray_con = oldset_con + newset_con  # Combined array for the condition
        testarray_lib = oldset_lib + newset_lib  # Combined array for some other condition

        # Shuffle the combined arrays using the random module
        random.shuffle(testarray_neu)  # Shuffling the neutral condition array
        random.shuffle(testarray_con)  # Shuffling the condition array
        random.shuffle(testarray_lib)  # Shuffling the other condition array
  Routine CLN_Random
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        #util.shuffle(CLN_List)
        #random.shuffle(CLN_List)

        #Points_List_Using = 0
  Routine CLNLoopCode
    CodeComponent CLN_loop_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Extract the current condition from 'condorder_now' based on the value of 'concounter'
        conditionnow = condorder_now[concounter]

        # Reset the 'trialcounter' to 0 for the current trial
        trialcounter = 0

        # Add 'conditionnow' to the data collected in the experiment
        thisExp.addData('conditionnow', conditionnow)
  Routine Update_CLN
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        # Increment concounter by 1
        concounter += 1
  Routine blockadvance
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Increment the variable 'blockn' by 1
        blockn += 1

        # Increment the variable 'themecounter' by 1
        themecounter += 1

        # Increment the variable 'condorder_counter' by 1
        condorder_counter += 1

        # Increment the variable 'blocknumber' by 1
        blocknumber += 1
  Routine EndMessage
    TextComponent thankyoumsg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed the third part of the experiment.

        Thank you!

        Press the ‘e’ key to exit.
    KeyboardComponent key_resp_final
      allowedKeys = 'space', 'e', 'E', 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please read the instructions carefully.

        During this task, you will make decisions and rate your confidence.

        Your goal is to earn as many points as you can. You will be given a bonus based on the points you earn. Bonus earnings will be granted after we have received and reviewed your task.

        The task may feel difficult. Please just make decisions as well as you can.

        Press the spacebar to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine Instructions_2
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will view a series of pictures during each STUDY BLOCK. The pictures will either show faces or art. Pay careful attention, as the pictures will appear quickly!

        Each STUDY BLOCK will be followed by a TEST BLOCK. During each TEST BLOCK, you will make decisions and rate your confidence.

        Press the spacebar to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine Instructions_3
    TextComponent instruct_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        During test blocks, you will decide whether to classify each face as "OLD", meaning you saw it in the MOST RECENT study block, or as "NEW", meaning you never studied it before.

        You will NOT be tested on images from older study blocks, only the most recent one.

        OLD: seen previously
        NEW: not seen previously

        Press the spacebar to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine Instructions_6
    TextComponent instruct_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Answering correctly will always award you 5 points.

        The number of points you lose for incorrect responses will change, and will depend on the type of error you make.

        There are 2 types of errors:
        1) responding ''old'' to a ''new'' image
        2) responding ''new'' to an ''old'' image


        Press the spacebar to continue
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine Instructions_5
    TextComponent instruct_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        You will report your confidence after responding “old” or “new”.

        To report high confidence, you will press the “3” key on your keyboard.

        To report medium confidence, you will press the “2” key.

        To report low confidence, you will press the “1” key.

        Please try to accurately report your confidence while also making use of the entire confidence scale.

        Press the spacebar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine Instructions_4
    TextComponent instruct_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        To respond “old” you will use the “j” key on your keyboard.

        To respond “new” you will use the “k” key.

        You will see reminders as to which key to use.

        Press the spacebar to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine Instructions_7
    TextComponent instruct_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        This amount that you can lose for incorrect choices will change between sections.

        In some sections, you will lose 10 points if you respond "new" when the picture is actually old. In these sections, you will only lose points if you say “new” incorrectly and will NOT lose points for saying "old" incorrectly.

        In other sections, you will lose 10 points if you respond "old" when the picture is actually new. On those blocks, you will only lose points for wrong "old" responses and will NOT lose points you say “new" incorrectly.

        Finally, in some blocks, you will not lose any points for incorrect responses. You will always earn +5 points for correct responses.

        Press the spacebar to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine Instructions_8
    TextComponent text_13
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The number of points you can earn or lose will be displayed at the bottom of the screen, under the possible choices.

        You will be given a pay bonus calculated from the amount of points you earn. The pay will be granted after your submission is approved. The maximum bonus you can earn is 5 dollars.

        Remember that the pictures will appear very quickly, so be prepared! Also, there are many trials, so please do not spend too much time on any single response.

        Press the spacebar to continue.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine End_Learn_Test
    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        End of Block

        Press ‘space’ to continue
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine TestBlock_Select
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # Define the point system for the decision phase based on the current condition
        if conditionnow == 1:
            # Condition: conservative
            condition = "conservative"
            hit_reward = 5
            cr_reward = 5
            miss_loss = 0
            miss_loss_msg = "Lose 0 points"
            miss_loss_trial = "0 points incorrect"
            fa_loss = -20
            fa_loss_trial = "-20 points incorrect"
            pay_msg = "Incorrect OLD loses 20"
            fa_loss_msg = "Lose 20 points"
            testset_using = testarray_con
        elif conditionnow == 2:
            # Condition: liberal
            condition = "liberal"
            hit_reward = 5
            cr_reward = 5
            miss_loss = -20
            miss_loss_trial = "-20 points incorrect"
            miss_loss_msg = "Lose 20 points"
            fa_loss = 0
            fa_loss_trial = "0 points incorrect"
            pay_msg = "Incorrect NEW loses 20"
            fa_loss_msg = "Lose 0 points"
            testset_using = testarray_lib
        else:
            # Condition: neutral
            condition = "neutral"
            hit_reward = 5
            cr_reward = 5
            miss_loss = 0
            miss_loss_msg = "Lose 0 points"
            miss_loss_trial = "0 points incorrect"
            fa_loss = 0
            fa_loss_trial = "0 points incorrect"
            pay_msg = "No loss for incorrect choices"
            fa_loss_msg = "Lose 0 points"
            testset_using = testarray_neu
  Routine BlockReport
    TextComponent blockreportearn
      letterHeight = 0.07
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockreport_earning
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    TextComponent total_earning_report
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $report_earning
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    TextComponent spacetocontinue
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press the space bar to continue
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine FreeResponse_2
    TextComponent Question_2
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Task Feedback

        Do you have any feedback or comments about the task?
    TextboxComponent comments
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      text = Please type your response here . . . 
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    MouseComponent mouse
      clickable = Clickable_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent Clickable_2
      letterHeight = 0.04
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = When finished, click here to continue. 
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  Routine QuestionProb
    TextComponent probq
      letterHeight = 0.04
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = What percent of the faces do you think were actually OLD?
      wrapWidth = 1.2
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    SliderComponent probold_slider
      forceEndRoutine = False
      granularity = .1
      initVal = 0
      labels = 0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    MouseComponent mouse_probold
      clickable = probold_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_16
      allowedKeys = 'c','C'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine QuestionHighConf
    TextComponent highconfq
      letterHeight = 0.04
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = When you say HIGH confidence, what percent of the time are you correct?
      wrapWidth = 1.2
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    SliderComponent highconf_slider
      forceEndRoutine = False
      granularity = .1
      initVal = 0
      labels = 0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    MouseComponent mouse_highconf
      clickable = highconf_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions2
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_17
      allowedKeys = 'c','C'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine QuestionLowConf
    TextComponent lowconfq
      letterHeight = 0.04
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = When you say LOW confidence, what percent of the time are you correct?
      wrapWidth = 1.2
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    SliderComponent lowconf_slider
      forceEndRoutine = False
      granularity = .1
      initVal = 0
      labels = 0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    MouseComponent mouse_lowconf
      clickable = lowconf_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions3
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_14
      allowedKeys = 'c','C'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine EndVariables
    CodeComponent code_message
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the reward number meets certain criteria to determine the bonus amount and message
        if reward_number >= 1450:
            dollar_amount = "5"
            message = "you've earned a bonus of $5."

        elif 1200 <= reward_number <= 1449:
            dollar_amount = "4"
            message = "you've earned a bonus of $4."

        elif 900 <= reward_number <= 1199:
            dollar_amount = "3"
            message = "you've earned a bonus of $3."

        elif 450 <= reward_number <= 899:
            dollar_amount = "2"
            message = "you've earned a bonus of $2."

        elif 1 <= reward_number <= 449:
            dollar_amount = "1"
            message = "you've earned a bonus of $1."

        else:
            dollar_amount = "0"
            message = "you didn't earn a bonus this time."

        # Create a string displaying the total earnings for the experiment
        exptotal_earning = "You earned " + str(reward_number) + " points, which means " + message

        # Add the experiment earning message to the data with a specific tag
        thisExp.addData('final_experiment_earning_message', exptotal_earning)

        # Add the final experiment earning value to the data with a specific tag
        thisExp.addData('final_experiment_earning', reward_number)
  Routine EndVariables_2
  Routine TestBlockMessage
    TextComponent testblockreport
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $testblockmsg
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    TextComponent spacebar2
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text = Please press the space bar to continue. 
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    KeyboardComponent key_resp_proceed2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine StudyBlockMessage
    TextComponent studyblockinfo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $studyblockmsg
    TextComponent s_key
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text = Please press the ’s’ key to start this block. 
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    KeyboardComponent key_resp_proceed
      allowedKeys = 's','S'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine TestTrial
    TextComponent running_total_pre
      color = red
      disabled = True
      letterHeight = 0.04
      pos = (0.45,0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Learning_TestTrial
      image [set every repeat] = $FacePic_test
      size = (0.201, 0.256)
      startVal [time (s)] = 0.0
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    TextComponent OLD
      color [set every frame] = white
      letterHeight = 0.045
      pos = (-0.33, -0.28)
      startVal [time (s)] = 0.0
      text = j = OLD
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    TextComponent NEW
      letterHeight = 0.045
      pos = (0.42, -0.28)
      startVal [time (s)] = 0.0
      text [set every repeat] = k = NEW
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    TextComponent Old_Points_minus
      letterHeight = 0.04
      pos = (-.33, -0.34)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fa_loss_trial
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    TextComponent Points_add_Old
      letterHeight = 0.04
      pos = (-.33, -0.40)
      startVal [time (s)] = 0.0
      text [set every repeat] = +5  points correct
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    TextComponent New_Points_minus
      letterHeight = 0.04
      pos = (0.42, -0.34)
      startVal [time (s)] = 0.0
      text [set every repeat] = $miss_loss_trial
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    TextComponent Points_Add_New
      letterHeight = 0.04
      pos = (0.42, -0.40)
      startVal [time (s)] = 0.0
      text = +5  points correct
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    KeyboardComponent TestTrialKey
      allowedKeys [set every repeat] = 'j','k'
      correctAns = $good_job
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine updatepay
    CodeComponent updatepointreward
      Code Type = Auto->JS
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      Begin Routine:
        # Reward_number stores earnings across the entire experiment

        conditions = {
            ('old', 'j'): (float(hit_reward), "hit"),
            ('new', 'k'): (float(cr_reward), "cr"),
            ('new', 'j'): (float(fa_loss), "fa"),
            ('old', 'k'): (float(miss_loss), "miss")
        }

        if (imagetruth, TestTrialKey.keys) in conditions:
            reward, responsetype = conditions[(imagetruth, TestTrialKey.keys)]
            reward_number = float(reward_number) + reward
            trialpay = reward
            blockpay = float(blockpay) + reward
        else:
            reward_number = float(reward_number)
            trialpay = 0
            blockpay = float(blockpay)

        thisExp.addData('blocknumber', blocknumber)
        thisExp.addData('totaltrialnum', totaltrialnum)
        thisExp.addData('testtrialnum', testtrialnum)
        thisExp.addData('responsetype', responsetype)
        thisExp.addData('trialpay', trialpay)
        thisExp.addData('blockpay', blockpay)
        thisExp.addData('totalpay', reward_number)
        thisExp.addData('hit_reward', hit_reward)
        thisExp.addData('cr_reward', cr_reward)
        thisExp.addData('fa_loss', fa_loss)
        thisExp.addData('miss_loss', miss_loss)

        blockreport_earning = f"Earnings for this block = {blockpay}"
        total_earning = f"Total earnings = {reward_number}"
        report_earning = f"Total earnings so far = {reward_number}"
        exptotal_earning = f"Total earnings for the experiment = {reward_number} points"
    CodeComponent record_recog_response
      Code Type = Auto->JS
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      Begin Routine:
        # Determine the 'recogresponse' based on the value of 'TestTrialKey.keys'
        # If 'TestTrialKey.keys' is 'j', set 'recogresponse' to "old", otherwise set it to "new"
        recogresponse = "old" if TestTrialKey.keys == 'j' else "new"

        # Determine the 'idealconfidence' based on the value of 'TestTrialKey.corr'
        # If 'TestTrialKey.corr' is 1, set 'idealconfidence' to "high", otherwise set it to "low"
        idealconfidence = "high" if TestTrialKey.corr == 1 else "low"

        # Add 'recogresponse' and 'idealconfidence' to the data collected in the experiment
        thisExp.addData('recogresponse', recogresponse)
        thisExp.addData('idealconfidence', idealconfidence)
  Routine ConfidenceRating
    TextComponent LT_Block_1_Confidence
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please rate your confidence on whether your decision is accurate.

          low   medium   high

           s      d        f
    KeyboardComponent key_resp_confidence
      allowedKeys [set every repeat] = 'f', 'd', 's'
      correctAns = $metacog_c
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Code_StudyBlock
    CodeComponent code_studyimage
      Code Type = Auto->JS
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      Begin Routine:
        # Code_StudyBlock

        FacePic = studyset_using[study_trial]

        thisExp.addData('imageShown',FacePic)
  Routine Running_Report
    CodeComponent confidence_record
      Code Type = Auto->JS
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      Begin Routine:
        # Define a dictionary to map keys to confidence responses
        key_to_confidence = {
            'f': "high",
            'd': "medium",
            's': "low"
        }

        # Set 'confidenceresp' based on the key response from 'key_resp_confidence'
        confidenceresp = key_to_confidence.get(key_resp_confidence.keys, None)

        thisExp.addData('confidenceresponse', confidenceresp)
  Routine OverallBlockCode
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        # Overall block code

        stimtype = "face"
        studyformat = "inperson"

        theme_using=imagearray[themecounter]

        oldset_using = theme_using[0:num_study]
        newset_using = theme_using[num_study:pics_per_block]

        studyset_using = oldset_using

        # current study trial
        study_trial = 0

        studyblockmsg = "STUDY PHASE: " + str(blocknumber) + "/" + str(num_blocks)
        testblockmsg = "DECISION PHASE: " + str(blocknumber) + "/" + str(num_blocks)

        if blocknumber == 1 or blocknumber == 2 or blocknumber == 3 or blocknumber == 4:
            message_time = 10
            presentation_time = 0
        else:
            message_time = 0
            presentation_time = 0
  Routine testingcount
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        reward_number = 0
  Routine FinishScreen
    TextComponent thankyoumsg_2
      letterHeight = 0.07
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Great job!
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    TextComponent experimentearning
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $exptotal_earning
      wrapWidth = 1.4
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.04
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Please press the spacebar to continue.
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  Routine Practice_Instructions
    TextComponent practice_instruct
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Now you will try a short practice set. 
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  Routine Practice_studyloop
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        practicestudy_trial = practicestudy_trial +1
  Routine Practice_testtrial
  Routine Practice_testinstructions
  Routine TestTrial_2
    ImageComponent Learning_TestTrial_4
      image [set every repeat] = $FacePic_test
      saveStartStop = False
      size = (0.201, 0.256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    TextComponent OLD_4
      color [set every frame] = $old_color
      letterHeight = 0.045
      pos = (-0.33, -0.28)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = j = OLD
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    TextComponent NEW_4
      color = $new_color
      letterHeight = 0.045
      pos = (0.42, -0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = k = NEW
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    TextComponent Old_Points_minus_4
      letterHeight = 0.04
      pos = (-.33, -0.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $fa_loss_trial
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    TextComponent Points_add_Old_4
      letterHeight = 0.04
      pos = (-.33, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = +5  points correct
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    TextComponent New_Points_minus_4
      letterHeight = 0.04
      pos = (0.42, -0.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $miss_loss_trial
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    TextComponent Points_Add_New_4
      letterHeight = 0.04
      pos = (0.42, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = +5  points correct
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    CodeComponent code_19
      Code Type = Py
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      Begin Routine:
        if last_pressed == 'j':
            old_color = 'yellow'
            new_color = 'white'
        if last_pressed == 'k':
            old_color = 'white'
            new_color = 'yellow'
  Routine Practice_testtrial_2
    TextComponent running_total_pre_2
      color = red
      letterHeight = 0.04
      pos = (0.45,0.4)
      startVal [time (s)] = 0.0
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    TextComponent OLD_2
      letterHeight = 0.03
      pos = (-0.4, -0.32)
      startVal [time (s)] = 0.0
      text = < left arrow = OLD
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    TextComponent NEW_2
      letterHeight = 0.03
      pos = (0.4, -0.32)
      startVal [time (s)] = 0.0
      text [set every repeat] =   right arrow = NEW >
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    ImageComponent Learning_TestTrial_2
      image [set every repeat] = $practicepic_test
      size = (0.4, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent Old_Points_minus_2
      letterHeight = 0.03
      pos = (-.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fa_loss
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    TextComponent Points_add_Old_2
      letterHeight = 0.03
      pos = (-.38, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = or +5 points
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    TextComponent New_Points_minus_2
      letterHeight = 0.03
      pos = (0.3, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $miss_loss
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    TextComponent Points_Add_New_2
      letterHeight = 0.03
      pos = (0.41, -0.4)
      startVal [time (s)] = 0.0
      text = or +5 points
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    KeyboardComponent TestTrialKey_2
      allowedKeys [set every repeat] = 'd','f'
      correctAns = $good_job
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Sound_Check
    TextComponent Overall_Instruction_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please ensure the volume is on and that you can hear this sound which will shortly play. 
      wrapWidth = 1.2
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    KeyboardComponent Overall_Instruction_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    SoundComponent sound_1
      sound = B
      startVal [time (s)] = 2
      volume = .5
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    TextComponent Continue
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 3
      text = If you did not hear the sound increase the volume using the keyboard. Press the spacebar to continue.
      wrapWidth = 1.2
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  Routine Now_The_Video_Will_Play
    TextComponent Overall_Instruction_text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will now be shown an instructional video about the task. You cannot pause or rewatch the video so pay close attention.
      wrapWidth = 1.2
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    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent Continue_2
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 4
      text = Press the spacebar to continue.
      wrapWidth = 1.2
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  Routine JustBlank
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine Practice_studytrial
    ImageComponent practice_image
      image = $practicePic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Practice_setupcode
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Experiment:
        practicestudy_trial = 0

        practice_block = 1

        practiceset = []

        for num in range(1,6):
            practiceset.append("resources/practiceset/" + "practiceset_" + str(num) + ".jpg")


        oldpracticeset = practiceset[0:3]
        newpracticeset = practiceset[3:6]
  Routine Practice_codestudy
    CodeComponent code_studyimage_2
      Code Type = Auto->JS
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      Begin Routine:
        # assigning the study item

        #FacePic = studyset_using[study_order[study_trial]]
        #if no randomization of study order
        practicePic = oldpracticeset[practicestudy_trial]

        thisExp.addData('imageShown',practicePic)
  Routine Practice_testblockcode
  Routine Practice_testloop
  Routine Payoff_InfoScreen
    TextComponent text_correctpayoff
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        *** PAY UPDATE ***
    TextComponent payalert
      color = cyan
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pay_msg
      wrapWidth = 1.2
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    TextComponent press_p
      letterHeight = 0.04
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press the ‘p’ button to continue.
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    KeyboardComponent key_resp_12
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_PayoffInfoScreen
    TextComponent text_correctpayoff_2
      letterHeight = 0.05
      pos = (-.2, .5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Pay Update:

        You earn +5 points for correct responses.
    TextComponent incorrectnewtext_2
      letterHeight = 0.05
      pos = (-.2, .1)
      startVal [time (s)] = 0.0
      text = For incorrect "new" responses, you will:
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    TextComponent incorrectnewvar_2
      letterHeight = 0.05
      pos = (-.2,0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $miss_loss_msg
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    TextComponent incorrectoldtext_2
      letterHeight = 0.05
      pos = (-.2, -.2)
      startVal [time (s)] = 0.0
      text = For incorrect "old" responses, you will:
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    TextComponent incorrectoldvar_2
      letterHeight = 0.05
      pos = (-.2, -.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fa_loss_msg
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    TextComponent spacepress
      letterHeight = 0.05
      pos = (-.2, -.4)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue.
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_ConfidenceRating
    TextComponent running_total_post_2
      color = red
      letterHeight = 0.04
      pos = (0.45, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent LT_Block_1_Confidence_2
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        j = High Confidence
        k = Medium Confidence
        l = Low Confidence
    KeyboardComponent key_resp_confidence_2
      allowedKeys [set every repeat] = 'j','k','l'
      correctAns = $metacog_c
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyStart_Message
    TextComponent endpractice_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        Great job!

        You’ve completed the practice.
        Now the actual task will begin.

        Remember that when you start the Study Block, a number of pictures will appear
  Routine ReminderMessage
    TextComponent studyreminder
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $message_time
      wrapWidth = 1.2
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      text:
        Reminders:

        If you need to take a break, it’s best to do so at the end of a decision phase.

        Please do not use any aids for the memory part of the task.

        Please try to accurately report your confidence.

        Press the spacebar to continue.
    KeyboardComponent key_resp_15
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $message_time
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  Routine QuestionCorrect
    TextComponent correctq
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = What percent of your answers do you think were correct?
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    SliderComponent probcorrect_slider
      forceEndRoutine = False
      granularity = .1
      initVal = 0
      labels = 0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    MouseComponent mouse_probcorrect
      clickable = probold_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions_2
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_18
      allowedKeys = 'c','C'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine Question_SelfRank
    TextComponent selfrankq
      letterHeight = 0.04
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Suppose you are one of 100 randomly chosen people who completed this task. What number of those people would you expect to perform better than you?
      wrapWidth = 1.2
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    SliderComponent selfrank_slider_s1
      forceEndRoutine = False
      granularity = .1
      initVal = 0
      labels = 0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100
      letterHeight = 0.02
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    MouseComponent mouse_selfrank
      clickable = probold_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions_3
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_19
      allowedKeys = 'c','C'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.3
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  Routine selfrank_slider
    TextComponent running_total_post_3
      color = red
      letterHeight = 0.04
      pos = (0.45, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent LT_Block_1_Confidence_3
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        j = High Confidence
        k = Medium Confidence
        l = Low Confidence
    KeyboardComponent key_resp_confidence_3
      allowedKeys [set every repeat] = 'j','k','l'
      correctAns = $metacog_c
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine QuestionProb_New
    TextComponent probq_2
      letterHeight = 0.04
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = What percent of the faces do you think were actually OLD?
      wrapWidth = 1.2
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    SliderComponent probold_slider_2
      forceEndRoutine = False
      granularity = .1
      initVal = 0
      labels = 0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60, 70, 80, 90, 100)
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    MouseComponent mouse_probold_2
      clickable = probold_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions_4
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_21
      allowedKeys = 'c','C'
      forceEndRoutine = True
      startVal [time (s)] = 0.4
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  Routine TestTrial_New
    TextComponent running_total_pre_3
      color = red
      disabled = True
      letterHeight = 0.04
      pos = (0.45,0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Learning_TestTrial_3
      image [set every repeat] = $FacePic_test
      size = (0.37, 0.37)
      startVal [time (s)] = 0.0
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    TextComponent OLD_3
      letterHeight = 0.045
      pos = (-0.38, -0.28)
      startVal [time (s)] = 0.0
      text = j = OLD
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    TextComponent NEW_3
      letterHeight = 0.045
      pos = (0.38, -0.28)
      startVal [time (s)] = 0.0
      text [set every repeat] = k = NEW
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    TextComponent Old_Points_minus_3
      letterHeight = 0.04
      pos = (-.49, -0.34)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fa_loss
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    TextComponent Points_add_Old_3
      letterHeight = 0.04
      pos = (-.33, -0.34)
      startVal [time (s)] = 0.0
      text [set every repeat] = or  +5  points
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    TextComponent New_Points_minus_3
      letterHeight = 0.04
      pos = (0.26, -0.34)
      startVal [time (s)] = 0.0
      text [set every repeat] = $miss_loss
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    TextComponent Points_Add_New_3
      letterHeight = 0.04
      pos = (0.42, -0.34)
      startVal [time (s)] = 0.0
      text = or  +5  points
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    KeyboardComponent TestTrialKey_3
      allowedKeys [set every repeat] = 'j','k'
      correctAns = $good_job
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Blank100
    TextComponent Blank_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine videoInstructions
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie = resources/videos/MeMoS - Memory Condition.mp4
      opacity = [1280,720]
      size = [1280,720]
      startVal [time (s)] = 0.0
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  Routine bonusMessage_2
    TextComponent bonusMessage_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = $bonus_message
      wrapWidth = 1.4
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  Routine Experimenter_Score_Code
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Experiment:
        def process_input():
            try:
                capturedText = input("Word: ")
            except EOFError:
                capturedText = "EMPTY FIELD"
                return capturedText
            return capturedText

        myText = process_input()
        print(myText)
  Routine QuestionMoneyScale
    TextComponent moneyscaleq1
      letterHeight = 0.04
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Overall, rate how often you based your final decision on the money?
      wrapWidth = 1.2
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    SliderComponent moneyscale_q1
      forceEndRoutine = False
      granularity = .1
      initVal = 3.5
      labels = "Rarely", 2, 3, 4, 5, "Often"
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1,2,3,4,5,6)
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    MouseComponent mouse_lowconf_2
      clickable = lowconf_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions3_2
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_23
      allowedKeys = 'c','C'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine QuestionMemoryScale
    TextComponent memoryscaleq1
      letterHeight = 0.04
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Overall, rate how often you based your final decision on your memory?
      wrapWidth = 1.2
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    SliderComponent memoryscale_q1
      forceEndRoutine = False
      granularity = .1
      initVal = 0
      labels = "Rarely", 2, 3, 4, 5, "Often"
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1,2,3,4,5,6)
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    MouseComponent mouse_lowconf_3
      clickable = lowconf_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions3_3
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_24
      allowedKeys = 'c','C'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine UncertaintyMoneyScale
    TextComponent uncertainty_money_q
      letterHeight = 0.04
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = When you were feeling uncertainty about a trial, rate how often you based your final decision on the money?
      wrapWidth = 1.2
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    SliderComponent uncertainty_money_q_response
      forceEndRoutine = False
      granularity = .1
      initVal = 3.5
      labels = "Rarely", 2, 3, 4, 5, "Often"
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1,2,3,4,5,6)
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    MouseComponent mouse_lowconf_4
      clickable = lowconf_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions3_4
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_25
      allowedKeys = 'c','C'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine UncertaintyMemoryScale
    TextComponent uncertainty_memory_q
      letterHeight = 0.04
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = When you were feeling uncertainty about a trial, rate how often you based your final decision on memory?
      wrapWidth = 1.2
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    SliderComponent uncertainty_memory_q_response
      forceEndRoutine = False
      granularity = .1
      initVal = 3.5
      labels = "Rarely", 2, 3, 4, 5, "Often"
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1,2,3,4,5,6)
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    MouseComponent mouse_lowconf_5
      clickable = lowconf_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions3_5
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_26
      allowedKeys = 'c','C'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine Commitment_Memory_Response
    TextComponent commitment_question
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Write your commitment toward using your memory on this task and your memory strategy.
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    TextboxComponent commitment_question_response
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.02
      size = (1.0, 0.09)
      startVal [time (s)] = 0.0
      text = Please type your response here . . . 
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    MouseComponent mouse_1
      clickable = Clickable_1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent Clickable_1
      letterHeight = 0.04
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = When finished, click here to go to the next question. 
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  Routine Memory_or_Money__12_Pt
    TextComponent mem_or_money_q
      letterHeight = 0.04
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Would you say overall that your choices were based on your memory or the money?
      wrapWidth = 1.2
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    SliderComponent mem_or_money_binary_response
      forceEndRoutine = False
      granularity = .1
      initVal = 6.5
      labels = "memory","","","","","","","","","","","money"
      letterHeight = 0.02
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1,2,3,4,5,6,7,8,9,10,11,12)
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    MouseComponent mouse_lowconf_6
      clickable = lowconf_slider
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructions3_6
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Using the mouse, click on the line above to give your answer. A red triangle should appear to indicate your choice. Then press the ‘c’ key to continue.
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    KeyboardComponent key_resp_27
      allowedKeys = 'c','C'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
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Flow
  Routine Overall_Instruction
  Routine Sound_Check
  Routine Now_The_Video_Will_Play
  Routine videoInstructions
  Routine Commitment_Memory_Response
  Routine Code
  LoopInitiator blockloop loopType="TrialHandler"
    loopType = random
    nReps = num_blocks
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    Routine OverallBlockCode
    Routine ReminderMessage
    Routine StudyBlockMessage
    LoopInitiator studypicloop loopType="TrialHandler"
      loopType = random
      nReps = num_study
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      Routine Code_StudyBlock
      Routine Learning_Trial
      Routine Blank300
      Routine studyloop
    LoopTerminator studypicloop
    Routine TestBlockCode
    Routine TestBlockMessage
    LoopInitiator conditionloop loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine CLNLoopCode
      Routine TestBlock_Select
      Routine Payoff_InfoScreen
      LoopInitiator testpicloop loopType="TrialHandler"
        loopType = random
        nReps = num_test
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        Routine Code_TestBlock
        Routine TestTrial
        Routine updatepay
        Routine ConfidenceRating
        Routine Running_Report
        Routine JustBlank
        Routine testloop
      LoopTerminator testpicloop
      Routine Update_CLN
    LoopTerminator conditionloop
    Routine BlockReport
    Routine blockadvance
  LoopTerminator blockloop
  Routine EndVariables
  Routine Blank100
  Routine QuestionProb
  Routine QuestionCorrect
  Routine Question_SelfRank
  Routine QuestionHighConf
  Routine QuestionLowConf
  Routine QuestionMoneyScale
  Routine QuestionMemoryScale
  Routine UncertaintyMoneyScale
  Routine UncertaintyMemoryScale
  Routine Memory_or_Money__12_Pt
  Routine Blank100
  Routine FreeResponse_2
  Routine FinishScreen
  Routine EndMessage
